PsychoPy2experiment version="2024.1.5"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1536, 864]
  expName = Word Priming
  keyboardBackend = ioHub
  logging level = warning
  runMode = 0
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Routines
  Routine trial
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8.0
      text [set every repeat] = $study_word
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    SliderComponent slider
      forceEndRoutine = True
      granularity = 0
      labels = "familiar", "Unfamiliar"
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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  Routine test
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    TextComponent text_2
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
      text [set every repeat] = $t_word
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    TextboxComponent textbox
      bold = False
      editable = True
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
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    TextComponent text_3
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
      text = Click to submit
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    MouseComponent mouse
      clickable = text_3
      forceEndRoutineOnPress = valid click
      saveMouseState = on valid click
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
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Flow
  LoopInitiator loop loopType="TrialHandler"
    conditionsFile = study word.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'study_word': 'vase'},
      {'study_word': 'tiger'},
      {'study_word': 'book'},
      {'study_word': 'cushion'},
      {'study_word': 'piano'},
      {'study_word': 'keys'},
      {'study_word': 'drums'},
      {'study_word': 'card'},
      {'study_word': 'guitar'},
      {'study_word': 'love'},
      {'study_word': 'cable'},
      {'study_word': 'drip'},
      {'study_word': 'poetry'},
      {'study_word': 'lyrics'},
      {'study_word': 'right'}]
    Routine trial
  LoopTerminator loop
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = t_word.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'t_word': '_a_e', 'reference': 'vase', 'old_new': 'old'},
      {'t_word': 't_g_r', 'reference': 'tiger', 'old_new': 'old'},
      {'t_word': 'oo', 'reference': 'book', 'old_new': 'old'},
      {'t_word': 'c_s_h_o_n', 'reference': 'cushion', 'old_new': 'old'},
      {'t_word': 'ia_n', 'reference': 'piano', 'old_new': 'old'},
      {'t_word': 'k_y_', 'reference': 'keys', 'old_new': 'old'},
      {'t_word': '_ru_s', 'reference': 'drums', 'old_new': 'old'},
      {'t_word': '__rd', 'reference': 'card', 'old_new': 'old'},
      {'t_word': 'g_i_ar', 'reference': 'guitar', 'old_new': 'old'},
      {'t_word': 'ov', 'reference': 'love', 'old_new': 'old'},
      {'t_word': '_abl_', 'reference': 'cable', 'old_new': 'old'},
      {'t_word': 'dr__', 'reference': 'drip', 'old_new': 'old'},
      {'t_word': 'po___ry', 'reference': 'poetry', 'old_new': 'old'},
      {'t_word': 'lyr___', 'reference': 'lyrics', 'old_new': 'old'},
      {'t_word': 'r__ht', 'reference': 'right', 'old_new': 'old'},
      {'t_word': 'r__e', 'reference': 'rope', 'old_new': 'new'},
      {'t_word': 'r__ch', 'reference': 'reach', 'old_new': 'new'},
      {'t_word': 'dr__', 'reference': 'draw', 'old_new': 'new'},
      {'t_word': 'r__e', 'reference': 'ride', 'old_new': 'new'},
      {'t_word': 'oo', 'reference': 'room', 'old_new': 'new'}]
    Routine test
  LoopTerminator trials
